PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'trialTime': '120'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2048, 1152]
  expName = mindfulBreathing
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1100000
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      text:
        In this task, you will be asked to count your breaths. Each trial will be 2 minutes long. Your goal is to count how many breaths you take in each 2 minute period. You will start each trial by pressing the spacebar, and the computer will let you know when to stop counting and enter the number of breaths that you counted. The goal here is to keep your awareness on your breath. The counting will help you do that by giving you a goal. There's no need to worry about controlling your breath, just observe and count.

        press spacebar when you're ready to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine getReadyToCount
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    TextComponent getReadyInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        Get ready to count your breaths.

        press the spacebar and begin counting when you're ready
    KeyboardComponent startCountRsp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine countingPeriod
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    VariableComponent alreadySaved
      startExpValue = False
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    VariableComponent flashCount
      startExpValue = 1
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    VariableComponent flashTim
      startExpValue = 2
      startRoutineValue = 2
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    CodeComponent diodeTimer
      Code Type = Auto->JS
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      Begin Routine:
        flashCount = 1
      Each Frame:
        if whitePhotoDiode_1.status == FINISHED:
            whitePhotoDiode_1.status = NOT_STARTED
            flashTim = flashTim + 2 + random()
            alreadySaved = False

        if alreadySaved == False and whitePhotoDiode_1.status == NOT_STARTED and tThisFlip >= flashTim - frameTolerance:
            thisExp.timestampOnFlip(win, 'diode' + str(flashCount))
            flashCount = flashCount + 1
            alreadySaved = True

          #how long should the trial be:
        if t >= int(expInfo['trialTime']):
            continueRoutine = False
    PolygonComponent blackPhotoDiodeBox
      fillColor = [-1, -1, -1]
      lineColor = [-1, -1, -1]
      pos = (-.7, .45)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent whitePhotoDiode_1
      fillColor [set every repeat] = [1,1,1]
      pos = (-.7, .45)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = $flashTim
      stopVal [duration (s)] = .20
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    TextComponent breathCountOnScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        +

        Count your breaths :)
  Routine countInput
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    VariableComponent typedText
      startExpValue = ''
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        typedText = ''
      Each Frame:
        if key_countRsp.status == STARTED and not waitOnFlip:
            theseKeys = key_countRsp.getKeys(keyList=['return', 'num_enter', 'backspace', '0','1','2','3','4','5','6','7','8','9'], ignoreKeys=["escape"], waitRelease=False)


            for key in theseKeys:
                if key in ['return', 'num_enter']:
                    continueRoutine = False
                elif key in ['backspace']:
                    typedText = typedText[:-1]
                elif key in ['0','1','2','3','4','5','6','7','8','9']:
                    if len(typedText) < 2:  # limit to 2 digits
                        typedText += str(key.name)
      End Routine:
        thisExp.addData('typedResponse', typedText)
    TextComponent text
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = How many breaths did you take? 
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    KeyboardComponent key_countRsp
      allowedKeys = 'return', 'num_enter', 'backspace', '0','1','2','3','4','5','6','7','8','9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent typedDisplay
      letterHeight = 0.05
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $typedText
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  Routine ThankYou
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating :)
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine getReadyToCount
    Routine countingPeriod
    Routine countInput
  LoopTerminator trials
  Routine ThankYou
