PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = restAudioBookTask
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1100000
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      text:
        In this task, we'd like to get a measure of your brain activity while you're just relaxing and listening to an audiobook. For the next part of the experiment, please continue to sit as still as possible while you relax and listen.

        press spacebar when you're ready to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audiobook
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    VariableComponent alreadySaved
      startExpValue = False
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    VariableComponent flashCount
      startExpValue = 1
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    VariableComponent flashTim
      startExpValue = 2
      startRoutineValue = 2
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    CodeComponent diodeTimer
      Code Type = Auto->JS
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      Each Frame:
        if whitePhotoDiode_1.status == FINISHED:
            whitePhotoDiode_1.status = NOT_STARTED
            flashTim = flashTim + 2 + random()
            alreadySaved = False

        if alreadySaved == False and whitePhotoDiode_1.status == NOT_STARTED and tThisFlip >= flashTim - frameTolerance:
            thisExp.timestampOnFlip(win, 'diode' + str(flashCount))
            flashCount = flashCount + 1
            alreadySaved = True


        if audioRecording.status == FINISHED:
            continueRoutine = False
    SoundComponent audioRecording
      sound = the-wonderful-wizard-of-oz-002-chapter-1-the-cyclone.2747.wav
      startVal [time (s)] = 0.0
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    PolygonComponent blackPhotoDiodeBox
      fillColor = [-1, -1, -1]
      lineColor = [-1, -1, -1]
      pos = (-.7, .45)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent whitePhotoDiode_1
      fillColor [set every repeat] = [1,1,1]
      pos = (-.7, .45)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = $flashTim
      stopVal [duration (s)] = .20
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  Routine thankYou
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating :)
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Flow
  Routine instructions
  Routine audiobook
  Routine thankYou
