PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'trialTime': '300', 'breathLen': '10'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2048, 1152]
  expName = slowBreathing
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1100000
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      text:
        In this task, we'd like to get a measure of your brain activity while you're just relaxing and listening to an audiobook. For the next part of the experiment, please continue to sit as still as possible while you relax and listen.

        press spacebar when you're ready to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine slowBreathing
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    VariableComponent breathLenInternal
      startExpValue = 10
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    VariableComponent barPos
      startExpValue = [0,-.51]
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    VariableComponent alreadySaved
      startExpValue = False
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    VariableComponent flashCount
      startExpValue = 1
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    VariableComponent flashTim
      startExpValue = 0
      startRoutineValue = 0
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    CodeComponent diodeTimer
      Code Type = Auto->JS
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      Begin Routine:
        goingUp = True
        breathLenInternal = int(expInfo['breathLen'])
      Each Frame:
        if whitePhotoDiode_1.status == FINISHED:
            whitePhotoDiode_1.status = NOT_STARTED
            flashTim = t+10000



        #upBound = .5
        #lowBound = -.5
        #step = (upBound - lowBound) / ((breathLenInternal/2)*round(expInfo['frameRate']))

        #if goingUp:
        #    if barPos[1] >= upBound:
        #        goingUp = False
        #    else:
        #        barPos[1] += step
        #else:
        #    if barPos[1] <= lowBound:
        #        goingUp = True
        #        flashTim = t
        #        thisExp.timestampOnFlip(win, 'diode' + str(flashCount))
        #        flashCount = flashCount + 1
        #    else:
        #        barPos[1] -= step
        ####
        # Settings
        upBound = 0.5
        lowBound = -0.5
        inhaleLen = breathLenInternal*.4  # seconds to go from low to high
        exhaleLen = breathLenInternal*.5  # seconds to go from high to low
        pauseLen = breathLenInternal*.1   # seconds to pause at bottom

        frameRate = round(expInfo['frameRate'])
        inhaleStep = (upBound - lowBound) / (inhaleLen * frameRate)
        exhaleStep = (upBound - lowBound) / (exhaleLen * frameRate)

        # State variables (initialize once)
        if 'barState' not in locals():
            barState = 'pause'
            phaseClock = core.Clock()
            pauseClock = core.Clock()

        # Easing function: maps t from 0 to 1 → position between lowBound and upBound
        def ease_in_out_sine(t):
            return lowBound + (upBound - lowBound) * 0.5 * (1 - cos(pi * t))

        def ease_out_sine(t):
            return upBound - (upBound - lowBound) * sin(t * pi / 2)

        def ease_in_out_cubic(t):
            if t < 0.5:
                return lowBound + (upBound - lowBound) * 4 * t**3
            else:
                return lowBound + (upBound - lowBound) * (1 - (-2 * t + 2)**3 / 2)

        if barState == 'inhale':
            t_inhale = phaseClock.getTime() / inhaleLen
            if t_inhale >= 1.0:
                barState = 'exhale'
                phaseClock.reset()
            else:
                barPos[1] = ease_in_out_cubic(t_inhale)

        elif barState == 'exhale':
            t_exhale = phaseClock.getTime() / exhaleLen
            if t_exhale >= 1.0:
                barState = 'pause'
                pauseClock.reset()

                # Log diode timestamp at bottom
                #flashTim = t
                #thisExp.timestampOnFlip(win, 'diode' + str(flashCount))
                #flashCount += 1
            else:
                barPos[1] = ease_out_sine(t_exhale)

        elif barState == 'pause':
            if pauseClock.getTime() >= pauseLen:
                flashTim = t
                thisExp.timestampOnFlip(win, 'diode' + str(flashCount))
                flashCount += 1
                barState = 'inhale'
                phaseClock.reset()
            else:
                barPos[1] = lowBound







        ####

        if t >= int(expInfo['trialTime']):
            continueRoutine = False
    PolygonComponent blackPhotoDiodeBox
      fillColor = [-1, -1, -1]
      lineColor = [-1, -1, -1]
      pos = (-.7, .45)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent whitePhotoDiode_1
      fillColor [set every repeat] = [1,1,1]
      pos = (-.7, .45)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = $flashTim
      stopVal [duration (s)] = .20
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    PolygonComponent polygon
      fillColor = white
      pos [set every frame] = $barPos
      shape = rectangle
      size = (1, .1)
      startVal [time (s)] = 0.0
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  Routine thankYou
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating :)
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Flow
  Routine instructions
  Routine slowBreathing
  Routine thankYou
